OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

CSV File Reader => #0
  Filename = C:/Users/cassa/OneDrive/BCI - Neurofeedback/Dev_projet/Stream_Laura
#0.Output stream -> Channel Selector "channel 7 ; channel 8"
  Channel List = channel 7 ; channel 8
  Action = Select
  Channel Matching Method = Name
-> Temporal filter "Filtre Bruit 50 Hz"
  Filter Method = Butterworth
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 48
  High Cut-off Frequency (Hz) = 52
  Band Pass Ripple (dB) = 0.5
-> Temporal filter "Filtre 7 - 13 Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 7
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5
-> Simple DSP
  Equation = x*x
-> Signal average
-> Spatial Filter => #6
  Spatial Filter Coefficients = 0.5;0.5
  Number of Output Channels = 1
  Number of Input Channels = 2
  Filter matrix file =
Data=#6 -> Signal display "Spatial Filter"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#6 -> LSL Export (Gipsa)
  Stream name = BCI
  Stream type = EEG

Signal display "Signal Brut"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Signal display "Signal Filtré"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Signal display "DSP"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
